CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:30
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does containregexp "CMB")
    Name to assign these images:cellMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C1")
    Name to assign these images:tef
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C2")
    Name to assign these images:per2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C3")
    Name to assign these images:bmal
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:cellMask
    Name the primary objects to be identified:cell
    Typical diameter of objects, in pixel units (Min,Max):150,700
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:bmal
    Name the output image:Enhanced_bmal
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:per2
    Name the output image:Enhanced_per2
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:tef
    Name the output image:Enhanced_tef
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:9|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
    Select the input image:Enhanced_bmal
    Name the output image:Masked_bmal
    Use objects or an image as a mask?:Objects
    Select object for mask:cell
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    Invert the mask?:No

MaskImage:[module_num:10|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
    Select the input image:Enhanced_per2
    Name the output image:Masked_per2
    Use objects or an image as a mask?:Objects
    Select object for mask:cell
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    Invert the mask?:No

MaskImage:[module_num:11|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
    Select the input image:Enhanced_tef
    Name the output image:Masked_tef
    Use objects or an image as a mask?:Objects
    Select object for mask:cell
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:Masked_bmal
    Name the primary objects to be identified:bmal_spots
    Typical diameter of objects, in pixel units (Min,Max):10,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.85
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:2.0
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:Masked_per2
    Name the primary objects to be identified:per2_spots
    Typical diameter of objects, in pixel units (Min,Max):10,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.85
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:2.0
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:Masked_tef
    Name the primary objects to be identified:tef_spots
    Typical diameter of objects, in pixel units (Min,Max):10,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.85
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:cell
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:16|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
    Parent objects:cell
    Child objects:bmal_spots
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:bmal_in_cell
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
RelateObjects:[module_num:17|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
    Parent objects:cell
    Child objects:per2_spots
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:per2_in_cell
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
RelateObjects:[module_num:18|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
    Parent objects:cell
    Child objects:tef_spots
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:tef_in_cell
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
ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|FISH_jul22\\imageJ_out\\CPout_bmal_per2_tef
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:per2_spots|Location_Center_Y,per2_spots|Location_Center_Z,per2_spots|Location_Center_X,per2_spots|Children_per2_in_cell_Count,per2_spots|Parent_cell,per2_spots|Number_Object_Number,tef_spots|Number_Object_Number,tef_spots|Location_Center_Y,tef_spots|Location_Center_X,tef_spots|Location_Center_Z,tef_spots|Parent_cell,tef_spots|Children_tef_in_cell_Count,cell|AreaShape_Area,cell|Location_Center_Z,cell|Location_Center_Y,cell|Location_Center_X,cell|Children_bmal_spots_Count,cell|Children_per2_spots_Count,cell|Children_CellMembrane_Count,cell|Number_Object_Number,bmal_spots|Location_Center_X,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:bmal_per2_tef_trial
    Overwrite existing files without warning?:No
    Data to export:cell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:bmal_spots
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:per2_spots
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:tef_spots
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExpandOrShrinkObjects:[module_num:20|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
    Select the input objects:cell
    Name the output objects:ShrunkenCell
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:No
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
IdentifyTertiaryObjects:[module_num:21|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
    Select the larger identified objects:cell
    Select the smaller identified objects:ShrunkenCell
    Name the tertiary objects to be identified:CellMembrane
    Shrink smaller object prior to subtraction?:No

CombineObjects:[module_num:22|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
    Select initial object set:CellMembrane
    Select object set to combine:bmal_in_cell
    Select how to handle overlapping objects:Segment
    Name the combined object set:CombinedObjects1

CombineObjects:[module_num:23|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
    Select initial object set:CellMembrane
    Select object set to combine:per2_in_cell
    Select how to handle overlapping objects:Segment
    Name the combined object set:CombinedObjects2

CombineObjects:[module_num:24|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
    Select initial object set:CellMembrane
    Select object set to combine:tef_in_cell
    Select how to handle overlapping objects:Segment
    Name the combined object set:CombinedObjects3

ConvertObjectsToImage:[module_num:25|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
    Select the input objects:CombinedObjects1
    Name the output image:bmal_spot_per_cell_image
    Select the color format:Color
    Select the colormap:Greens

ConvertObjectsToImage:[module_num:26|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
    Select the input objects:CombinedObjects2
    Name the output image:per2_spot_per_cell_image
    Select the color format:Color
    Select the colormap:Oranges

ConvertObjectsToImage:[module_num:27|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
    Select the input objects:CombinedObjects3
    Name the output image:tef_spot_per_cell_image
    Select the color format:Color
    Select the colormap:Reds

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:bmal_spot_per_cell_image
    Select method for constructing file names:From image filename
    Select image name for file prefix:bmal
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:spot_per_cell
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|FISH_jul22\\imageJ_out\\CPout_bmal_per2_tef
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:per2_spot_per_cell_image
    Select method for constructing file names:From image filename
    Select image name for file prefix:per2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:spot_per_cell
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|FISH_jul22\\imageJ_out\\CPout_bmal_per2_tef
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:tef_spot_per_cell_image
    Select method for constructing file names:From image filename
    Select image name for file prefix:tef
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:spot_per_cell
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|FISH_jul22\\imageJ_out\\CPout_bmal_per2_tef
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
